CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:FluorescenceDroplets
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:FluorescenceDroplets
    Name the primary objects to be identified:Droplets
    Typical diameter of objects, in pixel units (Min,Max):150,250
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:0
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.023
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
Crop:[module_num:6|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
    Select the input image:FluorescenceDroplets
    Name the output image:Droplets_Cropped
    Select the cropping shape:Objects
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    Remove empty rows and columns?:All
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    Select the objects:Droplets

MaskObjects:[module_num:7|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enabled:False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
    Select objects to be masked:Droplets
    Name the masked objects:Droplets_Mask
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Droplets
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:8|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enabled:False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
    Select the input image:Droplets_Cropped
    Name the primary objects to be identified:HIPO
    Typical diameter of objects, in pixel units (Min,Max):80,250
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:0
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.06
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
RescaleIntensity:[module_num:9|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enabled:False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
    Select the input image:Droplets_Cropped
    Name the output image:Droplets_Rescaled2
    Rescaling method:Choose specific values to be reset to a custom range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,255
    Intensity range for the output image:0.0,255
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
OverlayOutlines:[module_num:10|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Droplets_Cropped
    Name the output image:Overlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:Droplets

OverlayObjects:[module_num:11|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enabled:False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
    Input:Droplets_Cropped
    Name the output image:Add_HIPO
    Objects:Droplets
    Opacity:0.8

DisplayDataOnImage:[module_num:12|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
    Display object or image measurements?:Object
    Select the input objects:Droplets
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:Overlay
    Text color:white
    Name the output image that has the measurements displayed:Image_Droplets
    Font size (points):10
    Number of decimals:0
    Image elements to save:Figure
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
RescaleIntensity:[module_num:13|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enabled:False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
    Name the output image:RescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:Image_Droplets
    Select method for constructing file names:From image filename
    Select image name for file prefix:FluorescenceDroplets
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop\\Testing CellProfiler
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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